 <PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="Saved Data from file"
      Description="Programa de testes Saved Data Device." />
	
	<Device
      Id="SavedDataDevice"
      Type="SavedDataSource"
      SequenceFile="reconst_test_1.mha"
      UseData="IMAGE_AND_TRANSFORM"
      UseOriginalTimestamps="TRUE"
      ToolReferenceFrame="Tracker"
      RepeatEnabled="TRUE" >
      <DataSources>
        <DataSource Type="Video" Id="Video" BufferSize="100" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="SavedVideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
	
	<Device 
		Id="VideoMixer" 
		Type="VirtualMixer" >
		<InputChannels>
			<InputChannel Id="SavedVideoStream" />
		</InputChannels>
		<OutputChannels>
			<OutputChannel Id="MixedStream"/>
		</OutputChannels>
	</Device>
	
	
  </DataCollection>

<CoordinateDefinitions>
  <Transform From="Image" To="Tracker"
    Matrix="0 -1  0  0       
	    1  0  0  0 
            0  0  1  0     
            0  0  0  1"
    Date="2011.12.06 17:57:00" Error="0.0" />     
</CoordinateDefinitions>
  

  <PlusOpenIGTLinkServer 
    	MaxNumberOfIgtlMessagesToSend="10" 
    	MaxTimeSpentWithProcessingMs="50" 
    	ListeningPort="18944" 
    	SendValidTransformsOnly="true" 
    	OutputChannelId="MixedStream" > 
    	<DefaultClientInfo> 
      		<MessageTypes> 
        		<Message Type="IMAGE" />
				<Message Type="TRANSFORM" />
      		</MessageTypes>
      		<TransformNames> 
				<Transform Name="ImageToPolaris"/>
      		</TransformNames>
			<ImageNames>
				<Image Name="Image" EmbeddedTransformToFrame="Polaris"/>
			</ImageNames>
    	</DefaultClientInfo>
  </PlusOpenIGTLinkServer> 
  
 
</PlusConfiguration>