<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="fCal: Simulation mode for temporal calibration" 
      Description="Replays a recorded sequence of imaging the bottom of a water tank. Image and tracking data is provided by separate devices." />

    <Device
      Id="TrackerDeviceSavedDataset"
      Type="SavedDataSource"
      UseData="TRANSFORM"
      AcquisitionRate="10"
      LocalTimeOffsetSec="0.0"
      SequenceFile="WaterTankBottomTranslationTrackerBuffer-trimmed.mha"
      UseOriginalTimestamps="TRUE"
      RepeatEnabled="TRUE"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Probe" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>          
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDeviceSavedDataset" 
      Type="SavedDataSource"
      UseData="IMAGE"
      AcquisitionRate="10" 
      LocalTimeOffsetSec="0.0" 
      SequenceFile="WaterTankBottomTranslationVideoBuffer.mha"
      UseOriginalTimestamps="TRUE"
      RepeatEnabled="TRUE" >
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF"  />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    
    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
    
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="1.0 0.0 0.0 1000.0
              0.0 1.0 0.0 1000.0
              0.0 0.0 1.0 1000.0
              0.0 0.0 0.0 1.0"
      Date="2011.12.06 17:57:00" Error="0.0" /> 
  </CoordinateDefinitions> 

 <PlusOpenIGTLinkServer 
	MaxNumberOfIgtlMessagesToSend="1" 
	MaxTimeSpentWithProcessingMs="50" 
	ListeningPort="18944" 
	SendValidTransformsOnly="true" 
	OutputChannelId="TrackedVideoStream" > 
	<DefaultClientInfo> 
		<MessageTypes> 
			<Message Type="IMAGE" />
		</MessageTypes>
		<ImageNames>
			<Image Name="Image" EmbeddedTransformToFrame="Tracker"/>
		</ImageNames>
	</DefaultClientInfo>
  </PlusOpenIGTLinkServer> 

</PlusConfiguration>